PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Math_test_240624
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        myTimer = core.Clock()
        globalClock = core.Clock()
      Begin Routine:
        participant_input.text = ''
        print ("BEGINNING TRIAL")
      Each Frame:
        t = myTimer.getTime()

        if t < 10.0:
            math_question.draw()


        if t >= 10.00:
                continueRoutine = False
                myTimer.reset()


        timer_text = f"Time: {t:.1f} seconds"
        timer_text_box.text = timer_text

        if globalClock.getTime() >= 300:
            trials.finished = True
      End Routine:
        typed_answer = participant_input.text.replace (',', '.')
        typed_answer = ''.join([ch for ch in typed_answer if ch.isdigit() or ch in '.-'])
        typed_answer = typed_answer.strip()
        print("typed_text:",typed_answer)
        print("Participant input at the end of trial", participant_input.text)
        print("CorrAns at the end of trial", corrAns)
        print ("END TRIAL")
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent participant_input
      bold = False
      editable = True
      letterHeight = 0.08
      placeholder = ?
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    TextComponent math_question
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 0
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      text [set every repeat]:
        $question
    TextComponent instruction
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0
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      text:
        Type your answer in numbers.
        Press enter / return  to send your answer.
    TextboxComponent timer_text_box
      bold = False
      borderWidth = 3
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0.5, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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  Routine initial_instructions
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You'll see several math questions.
        There is limited time.
        Type your answer as fast as you can and then press Enter.

        Press space bar to continue.
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        thisFeedback = ""
      Begin Routine:
        print("BEGINNING FEEDBACK ROUTINE")

        print("Participant's answer beginning of feedback:", typed_answer)
        print("Answer's lenght beginning feedback:", len(typed_answer))
        print("Correct answer beginning feedback:", corrAns)

        # skip feedback if answer is correct

        try:
            if len(typed_answer) < 1:
                thisFeedback = "Incorrect"
            elif float(typed_answer) == corrAns:
                thisFeedback = ""
            else:
                thisFeedback = "Incorrect"
        except ValueError:
            # Handle the case where float(typed_answer) throws a ValueError
            thisFeedback = "Incorrect"

        trials.addData('correctAns', thisFeedback)
      End Routine:
        # Debugging: Print the feedback for this trial

        print("Participant's answer:", participant_input.text)
        print("Variable typed answer:", typed_answer)
        print("Participant's answer's lenght:", len(participant_input.text))
        print("Typed answer's length:", len(typed_answer))
        print("Correct answer:", corrAns)
        print("Feedback for this trial:", thisFeedback)
        print ("END OF FEEDBACK ROUTINE")
        myTimer.reset()
    TextComponent text
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $thisFeedback
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  Routine end_experiment
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you; this part has been concluded and your data was collected. 
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Flow
  Routine initial_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_math_B.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'question': '6 x 9', 'corrAns': 54},
      {'question': '22 - 4', 'corrAns': 18},
      {'question': '75 + 4', 'corrAns': 79},
      {'question': '174 - 5', 'corrAns': 169},
      {'question': '52 x 4', 'corrAns': 208},
      {'question': '8 + 2', 'corrAns': 10},
      {'question': '7 - 3', 'corrAns': 4},
      {'question': '9 : 3', 'corrAns': 3},
      {'question': '45 - 17', 'corrAns': 28},
      {'question': '3 x 9', 'corrAns': 27},
      {'question': '32 : 4', 'corrAns': 8},
      {'question': '62 - 16', 'corrAns': 46},
      {'question': '73 + 6', 'corrAns': 79},
      {'question': '30 : 3', 'corrAns': 10},
      {'question': '35 + 17', 'corrAns': 52},
      {'question': '12  + 13 ', 'corrAns': 25},
      {'question': '49 - 28', 'corrAns': 21},
      {'question': '67 + 23', 'corrAns': 90},
      {'question': '322 x 2', 'corrAns': 644},
      {'question': '40 : 8', 'corrAns': 5},
      {'question': '262 - 119', 'corrAns': 143},
      {'question': '56 : 8', 'corrAns': 7},
      {'question': '24 x 3', 'corrAns': 72},
      {'question': '55 + 48', 'corrAns': 103},
      {'question': '63 : 7', 'corrAns': 9},
      {'question': '396 - 203', 'corrAns': 193},
      {'question': '4 + 5 x 8', 'corrAns': 44},
      {'question': '(4 + 5) x 8', 'corrAns': 72},
      {'question': '5800 + 1100', 'corrAns': 6900},
      {'question': '10 x 54,3', 'corrAns': 543},
      {'question': '2,4 + 3,5', 'corrAns': 5.9},
      {'question': '84 x 0,5', 'corrAns': 42},
      {'question': '4090 + 1600', 'corrAns': 5690},
      {'question': '552,4 : 100', 'corrAns': 5.524},
      {'question': '0,4 x 8', 'corrAns': 3.2},
      {'question': '3372 x 4 ', 'corrAns': 13488},
      {'question': '|3 - 8|', 'corrAns': 5},
      {'question': '540 : 6', 'corrAns': 90}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
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine end_experiment
